CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:19
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:Cell
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Crop:[module_num:5|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
    Select the input image:Cell
    Name the output image:CropBlue
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:0,248
    Top and bottom rectangle positions:0,end
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    Remove empty rows and columns?:No
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
RescaleIntensity:[module_num:6|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
    Select the input image:CropBlue
    Name the output image:RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:RescaleIntensity
    Name the primary objects to be identified:Cells
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
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    Use advanced settings?:No
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
MaskObjects:[module_num:8|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
    Select objects to be masked:Cells
    Name the masked objects:MaskedCells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

ConvertObjectsToImage:[module_num:9|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
    Select the input objects:MaskedCells
    Name the output image:Cell_Mask
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:10|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Cell_Image
    Image or measurement?:Image
    Select the first image:RescaleIntensity
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Cell_Mask
    Multiply the second image by:1.0
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
EnhanceOrSuppressFeatures:[module_num:11|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
    Select the input image:Cell_Image
    Name the output image:EnhanceOrSuppressFeatures
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:12|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
    Select the input image:EnhanceOrSuppressFeatures
    Name the output image:Nucleus_Image
    Select the operation:Enhance
    Feature size:10
    Feature type:Dark holes
    Range of hole sizes:5,20
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
IdentifyPrimaryObjects:[module_num:13|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
    Select the input image:Nucleus_Image
    Name the primary objects to be identified:Nucleus
    Typical diameter of objects, in pixel units (Min,Max):6,25
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:0.6
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:30
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    Thresholding method:Otsu

IdentifySecondaryObjects:[module_num:14|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
    Select the input objects:Nucleus
    Name the objects to be identified:Cell
    Select the method to identify the secondary objects:Propagation
    Select the input image:Cell_Image
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:30
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    Thresholding method:Otsu

IdentifyTertiaryObjects:[module_num:15|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
    Select the larger identified objects:Cell
    Select the smaller identified objects:Nucleus
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectSizeShape:[module_num:16|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
    Select object sets to measure:Cytoplasm
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:17|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
    Select the objects to filter:Cytoplasm
    Name the output objects:Filter_Cytoplasm
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:100
    Filter using a maximum measurement value?:Yes
    Maximum value:500

ConvertObjectsToImage:[module_num:18|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
    Select the input objects:Filter_Cytoplasm
    Name the output image:Cytoplasm_Mask
    Select the color format:uint16
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
SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:Cytoplasm_Mask
    Select method for constructing file names:From image filename
    Select image name for file prefix:Cell
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_mask
    Saved file format:tiff
    Output file location:Elsewhere...|C:\\Linghao Hu\\Lab\\Group Meeting\\Data Analysis Training\\0608 exp-20210610T143715Z-001\\0608 exp\\Control\\NADH
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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